CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_CH2.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.348
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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enabled:False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
    Select the input image:DNA
    Name the primary objects to be identified:PH3
    Typical diameter of objects, in pixel units (Min,Max):7,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RelateObjects:[module_num:7|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enabled:False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
    Parent objects:Nuclei
    Child objects:PH3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifySecondaryObjects:[module_num:8|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:DNA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:9|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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:10|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:Nuclei

SaveImages:[module_num:13|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads\\OneDrive_2025-06-30\\Live-count-4x\\well 72
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|AreaShape_Zernike_4_2,Nuclei|AreaShape_Zernike_4_4,Nuclei|AreaShape_Zernike_4_0,Nuclei|AreaShape_Zernike_9_7,Nuclei|AreaShape_Zernike_9_5,Nuclei|AreaShape_Zernike_9_9,Nuclei|AreaShape_Zernike_9_1,Nuclei|AreaShape_Zernike_9_3,Nuclei|AreaShape_Zernike_8_8,Nuclei|AreaShape_Zernike_8_4,Nuclei|AreaShape_Zernike_8_2,Nuclei|AreaShape_Zernike_8_6,Nuclei|AreaShape_Zernike_8_0,Nuclei|AreaShape_Zernike_0_0,Nuclei|AreaShape_Zernike_6_6,Nuclei|AreaShape_Zernike_6_4,Nuclei|AreaShape_Zernike_6_2,Nuclei|AreaShape_Zernike_6_0,Nuclei|AreaShape_Zernike_2_0,Nuclei|AreaShape_Zernike_2_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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